
# Phantom


/gate/world/daughters/name hof_brain
/gate/world/daughters/insert ImageRegularParametrisedVolume
/gate/hof_brain/geometry/setImage data/brain_phantom.h33
/gate/hof_brain/geometry/setRangeToMaterialFile data/attenuation_range.dat
/gate/hof_brain/placement/setTranslation 0. 0. 0. mm
/gate/hof_brain/placement/setRotationAxis 1 0 0
/gate/hof_brain/placement/setRotationAngle 0 deg
/gate/hof_brain/setSkipEqualMaterials 0
/gate/hof_brain/attachPhantomSD


/gate/actor/addActor GPUTransTomoActor gpuactor
/gate/actor/gpuactor/attachTo hof_brain
#/gate/actor/gpuactor/cudaDevice 0
#/gate/actor/gpuactor/setGPUBufferSize 10000

/gate/actor/gpuactor/cudaDevice 1
/gate/output/spectGPU/bufferParticleEntry 20000000
